PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1600,900]
  expName = MainFlow
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine image
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    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = 470210197_1673329073262401_6938825334583811510_n.jpg
      pos = (0.3, 0.3)
      size = (0.5,None)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine tutorial
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    TextComponent text_norm
      font = Noto Sans
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Pilot mode

        In this experiment, an image will be shown for a certain period of time followed by 2 words at the left and right of the screen before disppear, then, subject will choose whether the left or right word are an acutal word

        press spacebar to start a demo routine
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine image1000
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    ImageComponent image_2
      image = an-emoji-disintegrating-in-pain.gif
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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  Routine blank
    RoutineSettingsComponent blank
      stopVal [duration (s)] = 2
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  Routine words2000
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    ImageComponent image_3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent image_4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine tutorial
  Routine image
  Routine image1000
  Routine blank
  Routine words2000
